PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = T6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent deal
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Kinnari Kamani/Desktop/Monsoon 2022/PSY310 Lab in Psych/Tutorials_Exp/excel/discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 89, 'future_reward': 92, 'delay': 165},
      {'reward_today': 95, 'future_reward': 105, 'delay': 180},
      {'reward_today': 103, 'future_reward': 110, 'delay': 200}]
    Routine trial
  LoopTerminator trials
