<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2022.2.2">
  <Settings>
    <Param val="use prefs" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="use prefs" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="{'participant':'f&quot;{randint(0, 999999):06.0f}&quot;', 'session':'001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="True" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="(1024, 768)" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="T7" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="exp" valType="code" updates="None" name="logging level"/>
    <Param val="MIDDLE_BUTTON" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <PolygonComponent name="fixation">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="white" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="white" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="fixation" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="circle" valType="str" updates="None" name="shape"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="1.0" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <PolygonComponent name="polygon">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="-1.0000, 0.0039, -1.0000" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="-1.0000, 0.0039, -1.0000" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="polygon" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="circle" valType="str" updates="None" name="shape"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="1.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <KeyboardComponent name="key_resp">
        <Param val="'space'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="1.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
    </Routine>
    <Routine name="beep">
      <SoundComponent name="sound_1">
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="hamming"/>
        <Param val="sound_1" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="$freq" valType="str" updates="set every repeat" name="sound"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="$delay" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="0.3" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
        <Param val="1" valType="num" updates="constant" name="volume"/>
      </SoundComponent>
    </Routine>
    <Routine name="response">
      <TextComponent name="text">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0.3)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="Report the delay between the key press and the beep on a scale of 0 - 999; Click 'submit' after entering the value." valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <TextboxComponent name="textbox">
        <Param val="center" valType="str" updates="constant" name="alignment"/>
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="True" valType="bool" updates="constant" name="autoLog"/>
        <Param val="False" valType="bool" updates="constant" name="bold"/>
        <Param val="None" valType="color" updates="constant" name="borderColor"/>
        <Param val="2" valType="num" updates="constant" name="borderWidth"/>
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="editable"/>
        <Param val="None" valType="color" updates="constant" name="fillColor"/>
        <Param val="False" valType="bool" updates="constant" name="flipHoriz"/>
        <Param val="False" valType="bool" updates="constant" name="flipVert"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="False" valType="bool" updates="constant" name="italic"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="1.0" valType="num" updates="constant" name="lineSpacing"/>
        <Param val="textbox" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="0" valType="num" updates="constant" name="padding"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="(None, None)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
      </TextboxComponent>
      <ButtonComponent name="button">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="True" valType="bool" updates="constant" name="bold"/>
        <Param val="None" valType="color" updates="constant" name="borderColor"/>
        <Param val="0" valType="num" updates="constant" name="borderWidth"/>
        <Param val="" valType="extendedCode" updates="constant" name="callback"/>
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="darkgrey" valType="color" updates="constant" name="fillColor"/>
        <Param val="Arvo" valType="str" updates="constant" name="font"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="False" valType="bool" updates="constant" name="italic"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="button" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="constant" name="oncePerClick"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="" valType="num" updates="constant" name="padding"/>
        <Param val="(0, -0.3)" valType="list" updates="constant" name="pos"/>
        <Param val="every click" valType="str" updates="None" name="save"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="(0.3, 0.1)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="Submit response" valType="str" updates="constant" name="text"/>
        <Param val="button onset" valType="str" updates="constant" name="timeRelativeTo"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
      </ButtonComponent>
    </Routine>
  </Routines>
  <Flow>
    <LoopInitiator loopType="TrialHandler" name="trials">
      <Param name="Selected rows" updates="None" val="" valType="str"/>
      <Param name="conditions" updates="None" val="[{'delay': 0.1, 'freq': 400, 'condition': 'unexp'}, {'delay': 0.4, 'freq': 400, 'condition': 'unexp'}, {'delay': 0.7, 'freq': 400, 'condition': 'unexp'}, {'delay': 0.1, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.4, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.1, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.4, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.1, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.4, 'freq': 1000, 'condition': 'exp'}, {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}]" valType="str"/>
      <Param name="conditionsFile" updates="None" val="C:/Users/Kinnari Kamani/Desktop/Monsoon 2022/PSY310 Lab in Psych/Tutorials_Exp/excel/ib conditions.xlsx" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="random" valType="str"/>
      <Param name="nReps" updates="None" val="5" valType="num"/>
      <Param name="name" updates="None" val="trials" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <Routine name="beep"/>
    <Routine name="response"/>
    <LoopTerminator name="trials"/>
  </Flow>
</PsychoPy2experiment>
